OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 40
-> Signal Decimation => #3
  Decimation factor = 4
Channel units generator => #4
  Number of channels = 1
  Unit = V
  Factor = 1e+00
Data=#3, Stimulations=#0.Stimulations, Channel Units=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
