OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Generic stream reader => #0
  Filename = C:/Users/HP User/source/repos/OVStroop/ov_experiment/scenarios/data/p-1_b-1_2023-10-24_15-19-46/record_p-1_b-1_2023.10.24-15.19.46.ov
#0.Output Signal -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Play
#0.Output Signal -> Timeout
  Timeout delay = 15
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Signal=#0.Output Signal, Stimulations=#0.Output Stimulations -> EDF File Writer
  Filename = C:/Users/HP User/source/repos/OVStroop/ov_experiment/scenarios/data/p-1_b-1_2023-10-24_15-19-46/record_p-1_b-1_2023-10-24_15-19-46.edf
