OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Generic stream reader => #0
  Filename = C:/Users/HP User/source/repos/OVStroop/ov_experiment/scenarios/data/p-1_b-1_2023-10-24_15-19-46/record_p-1_b-1_2023.10.24-15.19.46.ov
#0.Output Signal -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 100
-> Temporal Filter => #2
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 58
  High Cut-off Frequency (Hz) = 62
#0.Output Stimulations -> Stimulation Converter
  Keep other stimulations = true
  Stimulation range begin = OVTK_StimulationId_Label_11
  Stimulation range end = OVTK_StimulationId_Label_44
  Stimulation to send = OVTK_StimulationId_VisualStimulationStart
-> Stimulation Filter => #4
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_GDF_100_Watt
  Stimulation range end = OVTK_StimulationId_BaselineStop
Data=#2, Stimulations=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
